PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = (1024, 768)
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  color = $(0.0000, 0.0000, 0.0000)
  expName = exp
  keyboardBackend = PsychToolbox
  runMode = False
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # NOTE: Replace 'target_word' with the actual name of your column in your Excel/CSV conditions file!
        marker_text = f"Cue_Start: {target_word}"

        # Send the marker exactly when the screen refreshes to show the word
        win.callOnFlip(outlet.push_sample, [marker_text])
    TextComponent stimulus_go_txt
      color = $(0.1294, 0.8667, 0.1294)
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $target_word
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  Routine Finish
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text = Experiment finished
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    CodeComponent finish_code
      Code Type = Py
      End Experiment:
        # Destroy the LSL stream to release the background thread
        try:
            del outlet
            del info
            print("LSL marker stream closed cleanly.")
        except:
            pass
  Routine Instructions_silent
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    KeyboardComponent instructions_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent inst_silent_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Look at the center cross.

        A white word will appear.

        When the word turns green, perform the silent speech (articulate the word without sound).
    CodeComponent code_silent_instructions
      Code Type = Py
      Begin Routine:
        force_window_focus(win)
  Routine wait
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # Ejemplo: Duración aleatoria entre 1 y 3 segundos
        import numpy as np
        duracion_estimulo = np.random.uniform(0.5, 1.5)
    TextComponent ready_txt
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = $duracion_estimulo
      text = +
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  Routine Instructions_imagined
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    KeyboardComponent instructions_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent inst_imagined_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Look at the center cross.

        A white word will appear.

        When the word turns green, perform the imagined speech (imagine yourself saying the word without movement).
    CodeComponent code_instructions_imagined
      Code Type = Py
      Begin Routine:
        force_window_focus(win)
  Routine Welcome
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    TextComponent welcome_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
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    CodeComponent welcome_code
      Code Type = Py
      Before Experiment:
        import socket
        import time
        import json
        import subprocess
        import shutil
        from pylsl import StreamInfo, StreamOutlet
        import atexit
        import os
        import sys

        SCRIPT_DIR = os.path.dirname(os.path.abspath(__file__))
        PROJECT_ROOT = os.path.dirname(SCRIPT_DIR)

        BRIDGE_CANDIDATES = [
            os.path.join(PROJECT_ROOT, "data", "latest_prepared_run.json"),
        ]

        LABRECORDER_BASE_ROOT = os.path.join(PROJECT_ROOT, "recordings")

        LABRECORDER_EXE_CANDIDATES = [
            os.path.join(SCRIPT_DIR, "LabRecorder.exe"),
            os.path.join(SCRIPT_DIR, "LabRecorder", "LabRecorder.exe"),
            os.path.join(os.path.dirname(SCRIPT_DIR), "LabRecorder.exe"),
            os.path.join(os.path.dirname(SCRIPT_DIR), "LabRecorder", "LabRecorder.exe"),
            os.path.join(PROJECT_ROOT, "LabRecorder.exe"),
            os.path.join(PROJECT_ROOT, "LabRecorder", "LabRecorder.exe"),
            r"C:\Program Files\LabRecorder\LabRecorder.exe",
            r"C:\Program Files (x86)\LabRecorder\LabRecorder.exe",
        ]

        labrecorder_proc = None
        PREPARED_RUN = None
        PREPARED_RUN_SOURCE = None


        def force_window_focus(win):
            try:
                win.winHandle.activate()
                core.wait(0.15)
            except Exception as e:
                print(f"Could not force window focus: {e}")


        def load_prepared_run_bridge():
            global PREPARED_RUN_SOURCE

            for candidate in BRIDGE_CANDIDATES:
                if os.path.exists(candidate):
                    try:
                        with open(candidate, "r", encoding="utf-8") as f:
                            payload = json.load(f)
                        PREPARED_RUN_SOURCE = candidate
                        print(f"Loaded GUI bridge file: {candidate}")
                        return payload
                    except Exception as e:
                        print(f"Could not read GUI bridge file at {candidate}: {e}")

            print("No GUI bridge file found.")
            return None


        def apply_bridge_to_expinfo(expInfo, prepared_run):
            if not prepared_run:
                return expInfo

            expInfo["participant"] = prepared_run.get("participant_id", expInfo.get("participant", "001"))
            expInfo["session"] = prepared_run.get("session_id", expInfo.get("session", "001"))
            expInfo["run"] = prepared_run.get("run_id", expInfo.get("run", "001"))
            return expInfo


        def resolve_block_name(block_num):
            if block_num == 1:
                return "calibration"
            elif block_num == 2:
                return "silent"
            elif block_num == 3:
                return "imagined"
            return f"block{block_num}"


        def build_block_xdf_template(expInfo, block):
            participant = str(expInfo.get("participant", "test_subject")).replace(" ", "_")
            session = str(expInfo.get("session", "001")).replace(" ", "_")
            return f"exp_sub_{participant}_ses_{session}_bl_{block}.xdf"


        def build_labrecorder_file_cmd(expInfo, block):
            """
            Priority:
            1. Use GUI-prepared per-block path if present.
            2. Fall back to GUI-prepared calibration folder / expected_xdf_path.
            3. Fall back to default recordings/<block>/ folder.
            """
            file_root = None
            template = None

            if PREPARED_RUN is not None:
                recording_block_paths = PREPARED_RUN.get("recording_block_paths", {})

                block_path = recording_block_paths.get(block)
                if block_path:
                    block_path = os.path.normpath(block_path)
                    file_root = os.path.dirname(block_path)
                    template = os.path.basename(block_path)

                elif PREPARED_RUN.get("expected_xdf_path"):
                    expected_xdf_path = os.path.normpath(PREPARED_RUN["expected_xdf_path"])
                    file_root = os.path.dirname(expected_xdf_path)
                    template = build_block_xdf_template(expInfo, block)

            if file_root is None:
                file_root = os.path.join(LABRECORDER_BASE_ROOT, block)
                template = build_block_xdf_template(expInfo, block)

            os.makedirs(file_root, exist_ok=True)
            file_root = os.path.normpath(file_root) + "\\"

            cmd = f"filename {{root:{file_root}}} {{template:{template}}}"
            print("Sending LabRecorder filename command:", cmd)
            return cmd


        def labrecorder_is_listening(host="localhost", port=22345, timeout=0.5):
            try:
                s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                s.settimeout(timeout)
                s.connect((host, port))
                s.close()
                return True
            except Exception:
                return False


        def find_labrecorder_exe():
            # macOS: only accept native LabRecorder binaries/app bundles.
            if sys.platform == "darwin":
                mac_candidates = [
                    "/opt/homebrew/opt/labrecorder/LabRecorder.app/Contents/MacOS/LabRecorder",
                    "/usr/local/opt/labrecorder/LabRecorder.app/Contents/MacOS/LabRecorder",
                    "/Applications/LabRecorder.app/Contents/MacOS/LabRecorder",
                ]
                for candidate in mac_candidates:
                    if os.path.isfile(candidate) and os.access(candidate, os.X_OK):
                        return candidate

                from_path = shutil.which("LabRecorder") or shutil.which("labrecorder")
                if from_path:
                    return from_path
                return None

            # Windows: prefer the bundled executable.
            if sys.platform.startswith("win"):
                from_path = shutil.which("LabRecorder.exe") or shutil.which("LabRecorder")
                if from_path:
                    return from_path

                for exe in LABRECORDER_EXE_CANDIDATES:
                    if exe and os.path.isfile(exe):
                        return exe

                search_roots = [SCRIPT_DIR, os.path.dirname(SCRIPT_DIR), PROJECT_ROOT]
                for root in search_roots:
                    if not root or not os.path.isdir(root):
                        continue

                    for dirpath, dirnames, filenames in os.walk(root):
                        rel_depth = os.path.relpath(dirpath, root).count(os.sep)
                        if rel_depth > 3:
                            dirnames[:] = []
                            continue

                        if "LabRecorder.exe" in filenames:
                            return os.path.join(dirpath, "LabRecorder.exe")
                return None

            # Linux/other POSIX.
            return shutil.which("LabRecorder") or shutil.which("labrecorder")


        def ensure_labrecorder_running():
            global labrecorder_proc

            if labrecorder_is_listening():
                print("LabRecorder already running.")
                return True

            exe = find_labrecorder_exe()
            if exe is None:
                print("Could not find LabRecorder.exe.")
                print("Checked explicit candidates:", LABRECORDER_EXE_CANDIDATES)
                return False

            try:
                print(f"Launching LabRecorder from: {exe}")
                labrecorder_proc = subprocess.Popen([exe])

                for _ in range(20):
                    time.sleep(0.5)
                    if labrecorder_is_listening():
                        print("LabRecorder launched successfully and remote control is available.")
                        return True

                print("LabRecorder launched, but remote-control port 22345 did not become available.")
            except Exception as e:
                print(f"Failed to launch LabRecorder from {exe}: {e}")

            return False
      Begin Experiment:
        global PREPARED_RUN, PREPARED_RUN_SOURCE
        PREPARED_RUN = load_prepared_run_bridge()
        expInfo = apply_bridge_to_expinfo(expInfo, PREPARED_RUN)

        print("PREPARED_RUN =", PREPARED_RUN)
        print("expInfo after bridge =", expInfo)

        if PREPARED_RUN is not None and PREPARED_RUN.get("basename"):
            thisExp.dataFileName = os.path.join(_thisDir, "data", PREPARED_RUN["basename"])
            print("Overriding PsychoPy data file name:", thisExp.dataFileName)

        # 1. Delayed fuse to prevent the final freeze
        atexit.register(lambda: os._exit(0))

        # 2. Set our starting block number
        block_num = 1
        imagined_batch = 1
        silent_batch = 1
        recording_started = False

        # 3. Create the marker stream ONLY ONCE
        info = StreamInfo("PsychoPy_Markers", "Markers", 1, 0, "string", "my_silent_speech_exp")
        outlet = StreamOutlet(info)
        time.sleep(0.1)
        print("LSL Marker Stream created for the whole experiment.")
  Routine Start_record
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    CodeComponent code_start
      Code Type = Py
      Begin Routine:
        block = resolve_block_name(block_num)
        recording_started = False

        if not ensure_labrecorder_running():
            print("LabRecorder is not available. Recording was not started.")
        else:
            try:
                lr_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                lr_socket.settimeout(2.0)
                lr_socket.connect(("localhost", 22345))

                def send_cmd(cmd):
                    lr_socket.sendall(cmd.encode("utf-8") + b"\n")
                    time.sleep(0.2)
                    try:
                        lr_socket.recv(1024)
                    except:
                        pass

                send_cmd("update")
                send_cmd("select all")

                file_cmd = build_labrecorder_file_cmd(expInfo, block)
                #print("Sending LabRecorder filename command:", file_cmd)
                send_cmd(file_cmd)

                send_cmd("start")
                lr_socket.close()

                recording_started = True
                print(f"LabRecorder successfully started for BLOCK {block}!")

            except Exception as e:
                print("LabRecorder start failed:", e)

        # Advance experiment state even if LabRecorder failed,
        # otherwise downstream block logic breaks.
        block_num += 1
  Routine Stop_record
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    CodeComponent stop_code
      Code Type = Py
      Begin Routine:
        win.callOnFlip(outlet.push_sample, [f"{block}_BLOCK_END"])
        print(f"{block} block finished")
      End Routine:
        try:
            stop_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            stop_socket.settimeout(2.0)
            stop_socket.connect(("localhost", 22345))
            stop_socket.sendall(b"stop\n")
            stop_socket.close()
            print("Loop finished. LabRecorder stopped and block file saved.")
        except:
            pass
  Routine calibration
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    TextComponent fixCal
      letterHeight = 0.05
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.3
      text = +
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    TextComponent calStim
      letterHeight = 0.18
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = X
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    CodeComponent cal_code
      Code Type = Py
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      Begin Routine:
        import random
        p_target = 0.10
        is_target = (random.random() < p_target)

        if is_target:
            cal_char = str(random.randint(0, 9))
            tag = "T"
        else:
            cal_char = chr(random.randint(ord('A'), ord('Z')))
            tag = "NT"

        # Set the stimulus text *here* (so it is defined before drawing)
        calStim.setText(cal_char)

        # Marker aligned to the screen flip
        win.callOnFlip(outlet.push_sample, [f"CAL_STIM_ON:{cal_char}:{tag}"])
  Routine cal_instructions
    RoutineSettingsComponent cal_instructions
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      desc:
        Calibration (no mouthing).
        Look at the center and COUNT how many NUMBERS you see.
        Do not press any keys during calibration.
        Press SPACE to begin.
    KeyboardComponent calStartKeys
      allowedKeys = ["space"]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Calibration (no mouthing).
        Look at the center and COUNT how many NUMBERS you see.
        Do not press any keys during calibration.
        Press SPACE to begin.
    CodeComponent calibration_code
      Code Type = Py
      Begin Routine:
        import random
        random.seed(12345)
        force_window_focus(win)
        win.callOnFlip(outlet.push_sample, ["CAL_BLOCK_START"])
  Routine mini_break
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    CodeComponent break_code
      Code Type = Py
      Begin Routine:
        force_window_focus(win)

        if block == "silent":
            current_batch = silent_batch
            silent_batch += 1
            marker_txt = "SILENT_LOOP_BREAK_END"
        elif block == "imagined":
            current_batch = imagined_batch
            imagined_batch += 1
            marker_txt = "IMAGINED_LOOP_BREAK_END"
        else:
            current_batch = 0
            marker_txt = f"{str(block).upper()}_LOOP_BREAK_END"

        break_text = f"Loop {current_batch} finished!\n\nTake a short rest, blink, and swallow.\nPress SPACEBAR to start the next 10 words."
      End Routine:
        win.callOnFlip(outlet.push_sample, [marker_txt])
    KeyboardComponent break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent break_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $break_text
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  Routine read
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    TextComponent stimulus_txt_2
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $target_word
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Flow
  Routine Welcome
  Routine cal_instructions
  Routine Start_record
  LoopInitiator cal loopType="TrialHandler"
    endPoints = [0,1]
    loopType = sequential
    nReps = 200
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    Routine calibration
  LoopTerminator cal
  Routine Stop_record
  Routine Instructions_silent
  Routine Start_record
  LoopInitiator break_loop loopType="TrialHandler"
    endPoints = [0,1]
    loopType = random
    nReps = 10
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    LoopInitiator trials_silent loopType="TrialHandler"
      conditionsFile = Conditions.xlsx
      endPoints = [0,1]
      loopType = random
      nReps = 1
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      conditions:
        [{'target_word': '1 (ONE)'},
        {'target_word': '2 (TWO)'},
        {'target_word': '3 (THREE)'},
        {'target_word': '4 (FOUR)'},
        {'target_word': '5 (FIVE)'},
        {'target_word': 'REJOIN'},
        {'target_word': 'ASSET'},
        {'target_word': 'ABORT'},
        {'target_word': 'FORMATION'},
        {'target_word': 'REFUEL'}]
      Routine wait
      Routine read
      Routine trial
    LoopTerminator trials_silent
    Routine mini_break
  LoopTerminator break_loop
  Routine Stop_record
  Routine Instructions_imagined
  Routine Start_record
  LoopInitiator break_loop2 loopType="TrialHandler"
    endPoints = [0,1]
    loopType = random
    nReps = 10
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    LoopInitiator trials_imagined loopType="TrialHandler"
      conditionsFile = Conditions.xlsx
      endPoints = [0,1]
      loopType = random
      nReps = 1
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      conditions:
        [{'target_word': '1 (ONE)'},
        {'target_word': '2 (TWO)'},
        {'target_word': '3 (THREE)'},
        {'target_word': '4 (FOUR)'},
        {'target_word': '5 (FIVE)'},
        {'target_word': 'REJOIN'},
        {'target_word': 'ASSET'},
        {'target_word': 'ABORT'},
        {'target_word': 'FORMATION'},
        {'target_word': 'REFUEL'}]
      Routine wait
      Routine read
      Routine trial
    LoopTerminator trials_imagined
    Routine mini_break
  LoopTerminator break_loop2
  Routine Stop_record
  Routine Finish
