PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  End Message = Online imagined run complete.
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001","run":"001"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = (1024, 768)
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  color = $(0.0000, 0.0000, 0.0000)
  expName = Experiment_Online_Imagined
  keyboardBackend = PsychToolbox
  runMode = True
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        speech_window = 2.0
        trial_start_time = globalClock.getTime()

        current_trial_index += 1
        decoder_result_for_trial = None
        expected_result_json_path = None

        stimulus_go_txt.setText(target_word)
        win.callOnFlip(outlet.push_sample, [f"IMAGINED_GO:{target_word}"])
        thisExp.addData('current_trial_index', current_trial_index)
      Each Frame:
        if t >= speech_window:
            continueRoutine = False
      End Routine:
        trial_end_time = globalClock.getTime()
        completed_online_trials += 1
        thisExp.addData('trial_duration', trial_end_time - trial_start_time)

        # Do NOT overwrite predicted_word here.
        # The decoder result will be read in decode_wait.
        outlet.push_sample([f"IMAGINED_END:{target_word}"])
    TextComponent stimulus_go_txt
      color = $(0.1294, 0.8667, 0.1294)
      letterHeight = 0.17
      pos = (0, 0.08)
      startVal [time (s)] = 0
      text [set every repeat] = $target_word
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    TextComponent phase_txt_trial
      letterHeight = 0.06
      pos = (0, 0.28)
      startVal [time (s)] = 0
      text = Silently speak now
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  Routine Finish
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $run_summary_text
      wrapWidth = 1.2
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    CodeComponent finish_code
      Code Type = Py
      Begin Routine:
        summary_path = None
        summary_payload = None

        if (not online_decoder_results_dir) and (PREPARED_RUN is not None):
            online_decoder_results_dir = PREPARED_RUN.get('online_results_dir')

        if online_decoder_results_dir:
            summary_path = os.path.join(online_decoder_results_dir, 'run_summary.json')
            if os.path.exists(summary_path):
                try:
                    with open(summary_path, 'r', encoding='utf-8') as f:
                        summary_payload = json.load(f)
                except Exception:
                    summary_payload = None

        best_cosine_text = 'N/A'
        if brainprint_best_match_cosine is not None:
            best_cosine_text = f"{brainprint_best_match_cosine:.4f}"

        best_match_name = 'N/A'
        if brainprint_best_match_file:
            best_match_name = os.path.basename(brainprint_best_match_file)

        if summary_payload is not None:
            n_trials = summary_payload.get('n_trials', completed_online_trials)
            n_correct = summary_payload.get('n_correct', 'N/A')
            accuracy = summary_payload.get('accuracy', None)
            mean_conf = summary_payload.get('mean_confidence', None)
            mean_lat = summary_payload.get('mean_latency_ms', None)

            acc_text = f"{accuracy:.3f}" if isinstance(accuracy, (int, float)) else "N/A"
            conf_text = f"{mean_conf:.3f}" if isinstance(mean_conf, (int, float)) else "N/A"
            lat_text = f"{mean_lat:.1f} ms" if isinstance(mean_lat, (int, float)) else "N/A"

            run_summary_text = (
                "Online imagined run complete.\n\n"
                f"Trials completed: {n_trials}\n"
                f"Correct: {n_correct}\n"
                f"Accuracy: {acc_text}\n"
                f"Mean confidence: {conf_text}\n"
                f"Mean latency: {lat_text}\n\n"
                f"Brainprint status: {brainprint_status}\n"
                f"Adaptation allowed: {adaptation_allowed}\n"
                f"Adaptation reason: {adaptation_reason}\n"
                f"Best match: {best_match_name}\n"
                f"Best cosine: {best_cosine_text}\n\n"
                "Press SPACE to close."
            )
        else:
            run_summary_text = (
                "Online imagined run complete.\n\n"
                f"Trials completed: {completed_online_trials}\n\n"
                f"Brainprint status: {brainprint_status}\n"
                f"Adaptation allowed: {adaptation_allowed}\n"
                f"Adaptation reason: {adaptation_reason}\n"
                f"Best match: {best_match_name}\n"
                f"Best cosine: {best_cosine_text}\n\n"
                "Decoder summary not found.\n\n"
                "Press SPACE to close."
            )

        text_2.setText(run_summary_text)
      End Experiment:
        # Destroy the LSL stream to release the background thread
        try:
            del outlet
            del info
            print("LSL marker stream closed cleanly.")
        except:
            pass
    KeyboardComponent key_resp
      allowedKeys = 'space', 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Instructions_silent
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    KeyboardComponent instructions_key_resp
      allowedKeys = ["space"]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent inst_silent_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see one target word at the center of the screen.

        First it will appear in white.
        When it turns green, silently mouth that word.

        Wait for feedback after each trial.

        Press SPACE to begin.
    CodeComponent code_silent_instructions
      Code Type = Py
      Begin Routine:
        force_window_focus(win)
  Routine wait
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        import numpy as np
        iti = np.random.uniform(0.5, 1.5)
      Each Frame:
        if t >= iti:
            continueRoutine = False
    TextComponent ready_txt2
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = +
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  Routine Instructions_imagined
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    KeyboardComponent instructions_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent inst_imagined_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Look at the center cross.

        A white word will appear.

        When the word turns green, perform the imagined speech (imagine yourself saying the word without movement).
    CodeComponent code_instructions_imagined
      Code Type = Py
      Begin Routine:
        force_window_focus(win)
  Routine Welcome
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    TextComponent welcome_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
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    CodeComponent welcome_code
      Code Type = Py
      Before Experiment:
        import socket
        import time
        import json
        import subprocess
        import shutil
        from pylsl import StreamInfo, StreamOutlet
        import atexit
        import os
        import sys

        SCRIPT_DIR = os.path.dirname(os.path.abspath(__file__))
        PROJECT_ROOT = os.path.dirname(SCRIPT_DIR)

        labrecorder_proc = None
        PREPARED_RUN = None
        PREPARED_RUN_SOURCE = None


        def resolve_project_path(value):
            """Resolve runtime paths relative to PROJECT_ROOT, never current cwd.

            Existing absolute paths continue to work. Future portable bridge files can
            store project-relative paths such as data/latest_prepared_run.json,
            recordings/..., brainprints/..., or code/decoder/...
            """
            if value is None:
                return None

            text = str(value).strip()
            if not text:
                return None

            text = os.path.expandvars(os.path.expanduser(text))
            if os.path.isabs(text):
                return os.path.normpath(text)

            return os.path.normpath(os.path.join(PROJECT_ROOT, text))


        def load_project_config():
            """Load the optional project config used by the GUI/exportable version.

            This PsychoPy Builder script only relies on JSON to avoid requiring PyYAML
            inside the PsychoPy environment. Missing config is allowed; the experiment
            then falls back to the historical project-relative defaults.
            """
            candidates = [
                os.path.join(PROJECT_ROOT, 'config', 'project_config.json'),
            ]

            for candidate in candidates:
                if not os.path.exists(candidate):
                    continue
                try:
                    with open(candidate, 'r', encoding='utf-8') as f:
                        payload = json.load(f)
                    if isinstance(payload, dict):
                        print(f"Loaded project config: {candidate}")
                        return payload
                    print(f"Ignoring project config with non-dict top level: {candidate}")
                except Exception as e:
                    print(f"Could not load project config {candidate}: {e}")

            return {}


        PROJECT_CONFIG = load_project_config()


        def get_project_config_value(dotted_key, default=None):
            current = PROJECT_CONFIG
            for part in str(dotted_key).split('.'):
                if not isinstance(current, dict) or part not in current:
                    return default
                current = current[part]
            return current


        def get_configured_path(dotted_key, default=None):
            value = get_project_config_value(dotted_key, None)
            if value is None or str(value).strip() == '':
                value = default
            return resolve_project_path(value) if value else None


        def get_decoder_python_exe():
            """Return the Python executable used for decoder/brainprint subprocesses."""
            configured = get_configured_path('external_tools.decoder_python_exe', None)
            if configured:
                if os.path.exists(configured):
                    return configured
                print(f"Configured decoder_python_exe does not exist, falling back to sys.executable: {configured}")
            return sys.executable


        def get_psychopy_python_exe():
            """Return the configured PsychoPy Python executable, if any.

            The current Builder-generated script normally runs inside the correct
            PsychoPy/Python process already, so this helper is mostly for future
            launchers and diagnostic output.
            """
            configured = get_configured_path('external_tools.psychopy_python_exe', None)
            if configured and os.path.exists(configured):
                return configured
            return sys.executable


        BRIDGE_CANDIDATES = [
            get_configured_path('paths.bridge_file', os.path.join(PROJECT_ROOT, 'data', 'latest_prepared_run.json')),
            os.path.join(PROJECT_ROOT, 'data', 'latest_prepared_run.json'),
        ]
        BRIDGE_CANDIDATES = [p for p in BRIDGE_CANDIDATES if p]

        LABRECORDER_BASE_ROOT = get_configured_path(
            'paths.recordings_root',
            os.path.join(PROJECT_ROOT, 'recordings'),
        )


        def labrecorder_app_binary(app_path):
            """Return the executable inside a macOS .app bundle if it exists."""
            if not app_path:
                return None
            app_path = os.path.normpath(app_path)
            if not app_path.lower().endswith('.app') or not os.path.isdir(app_path):
                return None

            app_name = os.path.splitext(os.path.basename(app_path))[0]
            macos_dir = os.path.join(app_path, 'Contents', 'MacOS')
            candidates = [
                os.path.join(macos_dir, app_name),
                os.path.join(macos_dir, 'LabRecorder'),
                os.path.join(macos_dir, 'labrecorder'),
            ]
            for candidate in candidates:
                if os.path.exists(candidate):
                    return candidate
            return None


        def normalise_executable_candidate(path_value):
            if not path_value:
                return None
            path_value = resolve_project_path(path_value)
            if not path_value:
                return None

            app_binary = labrecorder_app_binary(path_value)
            if app_binary:
                return app_binary

            return path_value


        LABRECORDER_EXE_CANDIDATES = [
            get_configured_path('external_tools.labrecorder_exe', None),
            os.path.join(SCRIPT_DIR, 'LabRecorder.exe'),
            os.path.join(SCRIPT_DIR, 'LabRecorder', 'LabRecorder.exe'),
            os.path.join(os.path.dirname(SCRIPT_DIR), 'LabRecorder.exe'),
            os.path.join(os.path.dirname(SCRIPT_DIR), 'LabRecorder', 'LabRecorder.exe'),
            os.path.join(PROJECT_ROOT, 'LabRecorder.exe'),
            os.path.join(PROJECT_ROOT, 'LabRecorder', 'LabRecorder.exe'),
            os.path.join(PROJECT_ROOT, 'LabRecorder.app'),
            os.path.join(PROJECT_ROOT, 'LabRecorder', 'LabRecorder.app'),
            os.path.join('/Applications', 'LabRecorder.app'),
            os.path.join('/Applications', 'LabRecorder.app', 'Contents', 'MacOS', 'LabRecorder'),
            '/opt/homebrew/opt/labrecorder/LabRecorder.app',
            '/opt/homebrew/opt/labrecorder/LabRecorder.app/Contents/MacOS/LabRecorder',
            '/usr/local/opt/labrecorder/LabRecorder.app',
            '/usr/local/opt/labrecorder/LabRecorder.app/Contents/MacOS/LabRecorder',
            r'C:\Program Files\LabRecorder\LabRecorder.exe',
            r'C:\Program Files (x86)\LabRecorder\LabRecorder.exe',
        ]


        def resolve_prepared_run_paths(payload):
            """Normalise known bridge path fields to absolute paths for this script.

            This keeps the rest of the PsychoPy script stable: all existing code can
            continue using os.path.exists, os.makedirs, subprocess arguments, etc.
            """
            if not isinstance(payload, dict):
                return payload

            payload = dict(payload)

            for key in [
                'expected_xdf_path',
                'metadata_path',
                'manifest_path',
                'online_results_dir',
                'decoder_bundle_path',
                'brainprint_compare_json',
                'brainprint_summary_json',
            ]:
                if payload.get(key):
                    payload[key] = resolve_project_path(payload[key])

            block_paths = payload.get('recording_block_paths')
            if isinstance(block_paths, dict):
                payload['recording_block_paths'] = {
                    block: resolve_project_path(path_value) if path_value else path_value
                    for block, path_value in block_paths.items()
                }

            ensemble = payload.get('decoder_ensemble')
            if isinstance(ensemble, dict):
                ensemble = dict(ensemble)
                components = []
                for component in ensemble.get('components', []):
                    if isinstance(component, dict):
                        component = dict(component)
                        if component.get('bundle_path'):
                            component['bundle_path'] = resolve_project_path(component['bundle_path'])
                    components.append(component)
                ensemble['components'] = components
                payload['decoder_ensemble'] = ensemble

            return payload


        def force_window_focus(win):
            # On macOS, forcing activation of the pyglet/Cocoa window can freeze the next win.flip().
            # Keep the Windows/Linux behavior, but make this a no-op on macOS.
            import sys as _sys
            if _sys.platform == "darwin":
                print("[MAC] Skipping force_window_focus() to avoid Cocoa/pyglet flip freeze.", flush=True)
                return
            try:
                win.winHandle.activate()
                core.wait(0.15)
            except Exception as e:
                print(f"Could not force window focus: {e}", flush=True)


        def load_prepared_run_bridge():
            global PREPARED_RUN_SOURCE

            for candidate in BRIDGE_CANDIDATES:
                if os.path.exists(candidate):
                    try:
                        with open(candidate, 'r', encoding='utf-8') as f:
                            payload = json.load(f)
                        payload = resolve_prepared_run_paths(payload)
                        PREPARED_RUN_SOURCE = os.path.normpath(candidate)
                        print(f"Loaded GUI bridge file: {candidate}")
                        return payload
                    except Exception as e:
                        print(f"Could not read GUI bridge file at {candidate}: {e}")

            print("No GUI bridge file found.")
            return None


        def apply_bridge_to_expinfo(expInfo, prepared_run):
            if not prepared_run:
                return expInfo

            expInfo['participant'] = prepared_run.get('participant_id', expInfo.get('participant', '001'))
            expInfo['session'] = prepared_run.get('session_id', expInfo.get('session', '001'))
            expInfo['run'] = prepared_run.get('run_id', expInfo.get('run', '001'))
            return expInfo


        def resolve_block_name(block_num):
            if block_num == 1:
                return 'calibration'
            elif block_num == 2:
                return 'imagined'
            elif block_num == 3:
                return 'imagined'
            return f'block{block_num}'


        def build_block_xdf_template(expInfo, block):
            participant = str(expInfo.get('participant', 'test_subject')).replace(' ', '_')
            session = str(expInfo.get('session', '001')).replace(' ', '_')
            run_id = str(expInfo.get('run', '001')).replace(' ', '_')

            if PREPARED_RUN is not None:
                experiment_mode = str(PREPARED_RUN.get('experiment_mode', 'recording')).replace(' ', '_')
            else:
                experiment_mode = 'recording'

            return f'exp_sub_{participant}_ses_{session}_run_{run_id}_mode_{experiment_mode}_bl_{block}.xdf'


        def build_labrecorder_file_cmd(expInfo, block):
            """
            Priority:
            1. Use GUI-prepared per-block path if present.
            2. Fall back to GUI-prepared calibration folder / expected_xdf_path.
            3. Fall back to default recordings/<block>/ folder.
            """
            file_root = None
            template = None

            if PREPARED_RUN is not None:
                recording_block_paths = PREPARED_RUN.get('recording_block_paths', {})

                block_path = recording_block_paths.get(block)
                if block_path:
                    block_path = os.path.normpath(block_path)
                    file_root = os.path.dirname(block_path)
                    template = os.path.basename(block_path)

                elif PREPARED_RUN.get('expected_xdf_path'):
                    expected_xdf_path = os.path.normpath(PREPARED_RUN['expected_xdf_path'])
                    file_root = os.path.dirname(expected_xdf_path)
                    template = build_block_xdf_template(expInfo, block)

            if file_root is None:
                experiment_mode = PREPARED_RUN.get('experiment_mode', 'recording') if PREPARED_RUN else 'recording'
                file_root = os.path.join(LABRECORDER_BASE_ROOT, experiment_mode, block)
                template = build_block_xdf_template(expInfo, block)

            os.makedirs(file_root, exist_ok=True)
            file_root = os.path.normpath(file_root)
            if not file_root.endswith(os.sep):
                file_root = file_root + os.sep

            cmd = f'filename {{root:{file_root}}} {{template:{template}}}'
            print('Sending LabRecorder filename command:', cmd)
            return cmd


        def labrecorder_is_listening(host='localhost', port=22345, timeout=0.5):
            try:
                s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                s.settimeout(timeout)
                s.connect((host, port))
                s.close()
                return True
            except Exception:
                return False


        def executable_exists(path_value):
            candidate = normalise_executable_candidate(path_value)
            if not candidate or not os.path.exists(candidate):
                return None

            # Never select a bundled Windows executable on macOS/Linux merely because
            # the file exists inside the exported repository.
            if not sys.platform.startswith('win') and str(candidate).lower().endswith('.exe'):
                return None

            # On POSIX systems require an actually executable native binary.
            if not sys.platform.startswith('win') and not os.access(candidate, os.X_OK):
                return None

            return candidate


        def find_labrecorder_exe():
            # 1) Project config override and explicit known candidates.
            for exe in LABRECORDER_EXE_CANDIDATES:
                candidate = executable_exists(exe)
                if candidate:
                    return candidate

            # 2) PATH lookup.
            from_path = shutil.which('LabRecorder.exe') or shutil.which('LabRecorder') or shutil.which('labrecorder')
            if from_path:
                return from_path

            # 3) Shallow project search. Avoid deep recursive scans in large data folders.
            search_roots = [SCRIPT_DIR, os.path.dirname(SCRIPT_DIR), PROJECT_ROOT]
            for root in search_roots:
                if not root or not os.path.isdir(root):
                    continue

                for dirpath, dirnames, filenames in os.walk(root):
                    rel_depth = os.path.relpath(dirpath, root).count(os.sep)
                    if rel_depth > 3:
                        dirnames[:] = []
                        continue

                    for filename in ['LabRecorder.exe', 'LabRecorder', 'labrecorder']:
                        if filename in filenames:
                            return os.path.join(dirpath, filename)

                    for dirname in list(dirnames):
                        if dirname.lower() == 'labrecorder.app':
                            app_binary = labrecorder_app_binary(os.path.join(dirpath, dirname))
                            if app_binary:
                                return app_binary

            return None


        def ensure_labrecorder_running():
            global labrecorder_proc

            if labrecorder_is_listening():
                print('LabRecorder already running.')
                return True

            exe = find_labrecorder_exe()
            if exe is None:
                print('Could not find LabRecorder executable.')
                print('Checked explicit candidates:', LABRECORDER_EXE_CANDIDATES)
                print('Set external_tools.labrecorder_exe in config/project_config.json if needed.')
                return False

            try:
                print(f'Launching LabRecorder from: {exe}')
                labrecorder_proc = subprocess.Popen([exe])

                for _ in range(20):
                    time.sleep(0.5)
                    if labrecorder_is_listening():
                        print('LabRecorder launched successfully and remote control is available.')
                        return True

                print('LabRecorder launched, but remote-control port 22345 did not become available.')
            except Exception as e:
                print(f'Failed to launch LabRecorder from {exe}: {e}')

            return False
      Begin Experiment:
        global PREPARED_RUN

        PREPARED_RUN = load_prepared_run_bridge()
        expInfo = apply_bridge_to_expinfo(expInfo, PREPARED_RUN)

        print("PREPARED_RUN =", PREPARED_RUN)
        print("expInfo after bridge =", expInfo)

        CONDITIONS_XLSX = get_configured_path("paths.conditions_xlsx", os.path.join(PROJECT_ROOT, "psychopy", "Conditions.xlsx"))

        if PREPARED_RUN is not None and PREPARED_RUN.get("basename"):
            thisExp.dataFileName = os.path.join(_thisDir, "data", PREPARED_RUN["basename"])
            print("Overriding PsychoPy data file name:", thisExp.dataFileName)

        # 1. Delayed fuse to prevent the final freeze
        atexit.register(lambda: os._exit(0))

        # 2. Set our starting block number
        block_num = 1
        imagined_batch = 1
        silent_batch = 1
        recording_started = False

        completed_online_trials = 0
        predicted_word = ''
        prediction_confidence = ''
        feedback_text = ''
        run_summary_text = ''
        online_decoder_proc = None
        online_decoder_results_dir = None
        current_trial_index = 0
        decoder_result_for_trial = None
        expected_result_json_path = None
        decode_wait_start_time = None
        decode_timeout_sec = 5.0
        # 3. Create the marker stream ONLY ONCE
        info = StreamInfo("PsychoPy_Markers", "Markers", 1, 0, "string", "my_imagined_speech_exp")
        outlet = StreamOutlet(info)
        time.sleep(0.1)
        print("LSL Marker Stream created for the whole experiment.")
  Routine Start_record
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    CodeComponent code_start
      Code Type = Py
      Begin Routine:
        block = resolve_block_name(block_num)
        recording_started = False

        if not ensure_labrecorder_running():
            print("LabRecorder is not available. Recording was not started.")
        else:
            try:
                lr_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
                lr_socket.settimeout(2.0)
                lr_socket.connect(("localhost", 22345))

                def send_cmd(cmd):
                    lr_socket.sendall(cmd.encode("utf-8") + b"\n")
                    time.sleep(0.2)
                    try:
                        lr_socket.recv(1024)
                    except:
                        pass

                send_cmd("update")
                send_cmd("select all")

                file_cmd = build_labrecorder_file_cmd(expInfo, block)
                print("Sending LabRecorder filename command:", file_cmd)
                send_cmd(file_cmd)

                send_cmd("start")
                lr_socket.close()

                recording_started = True
                print(f"LabRecorder successfully started for BLOCK {block}!")

            except Exception as e:
                print("LabRecorder start failed:", e)

        # Advance experiment state even if LabRecorder failed,
        # otherwise downstream block logic breaks.
        block_num += 1
  Routine Stop_record
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    CodeComponent stop_code
      Code Type = Py
      Begin Routine:
        win.callOnFlip(outlet.push_sample, [f"{block}_BLOCK_END"])
        print(f"{block} block finished")
      End Routine:
        try:
            stop_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            stop_socket.settimeout(2.0)
            stop_socket.connect(("localhost", 22345))
            stop_socket.sendall(b"stop\n")
            stop_socket.close()
            print("Loop finished. LabRecorder stopped and block file saved.")
        except:
            pass
  Routine calibration
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    TextComponent fixCal
      letterHeight = 0.05
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.3
      text = +
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    TextComponent calStim
      letterHeight = 0.18
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = X
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    CodeComponent cal_code
      Code Type = Py
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      Begin Routine:
        import random
        p_target = 0.10
        is_target = (random.random() < p_target)

        if is_target:
            cal_char = str(random.randint(0, 9))
            tag = "T"
        else:
            cal_char = chr(random.randint(ord('A'), ord('Z')))
            tag = "NT"

        # Set the stimulus text *here* (so it is defined before drawing)
        calStim.setText(cal_char)

        # Marker aligned to the screen flip
        win.callOnFlip(outlet.push_sample, [f"CAL_STIM_ON:{cal_char}:{tag}"])
  Routine cal_instructions
    RoutineSettingsComponent cal_instructions
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      desc:
        Calibration (no mouthing).
        Look at the center and COUNT how many NUMBERS you see.
        Do not press any keys during calibration.
        Press SPACE to begin.
    KeyboardComponent calStartKeys
      allowedKeys = ["space"]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Calibration (no mouthing).
        Look at the center and COUNT how many NUMBERS you see.
        Do not press any keys during calibration.
        Press SPACE to begin.
    CodeComponent calibration_code
      Code Type = Py
      Begin Routine:
        import random
        random.seed(12345)
        force_window_focus(win)
        win.callOnFlip(outlet.push_sample, ["CAL_BLOCK_START"])
  Routine mini_break
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    CodeComponent break_code
      Code Type = Py
      Begin Routine:
        # Show a rest screen after every 50 completed online imagined trials, except after the final trial.
        # This is safer for long validation runs: with 450 trials, this gives about 8 rests.
        break_every_n_trials = 50
        try:
            total_imagined_trials = int(trials_online_imagined.nTotal)
        except Exception:
            total_imagined_trials = 0

        show_mini_break = (
            completed_online_trials > 0
            and completed_online_trials % break_every_n_trials == 0
            and (total_imagined_trials <= 0 or completed_online_trials < total_imagined_trials)
        )

        if not show_mini_break:
            marker_txt = None
            continueRoutine = False
        else:
            force_window_focus(win)
            marker_txt = f"IMAGINED_REST_END:{completed_online_trials}"
            win.callOnFlip(outlet.push_sample, [f"IMAGINED_REST_START:{completed_online_trials}"])
            print(f"[REST] {completed_online_trials} imagined trials completed. Press SPACEBAR to continue.", flush=True)
      End Routine:
        if marker_txt:
            win.callOnFlip(outlet.push_sample, [marker_txt])
    KeyboardComponent break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent break_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Rest break\n\nTake a short rest, blink, and swallow.\n\nPress SPACEBAR when you are ready to continue.
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  Routine read
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    CodeComponent read_code
      Code Type = Py
      Begin Routine:
        cue_duration = 1.5
        feedback_text = ""
        predicted_word = ""
        prediction_confidence = ""

        win.callOnFlip(outlet.push_sample, [f"IMAGINED_CUE:{target_word}"])
        stimulus_txt_2.setText(target_word)
      Each Frame:
        if t >= cue_duration:
            continueRoutine = False
    TextComponent stimulus_txt_2
      letterHeight = 0.17
      pos = (0, 0.08)
      startVal [time (s)] = 0
      text [set every repeat] = $target_word
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    TextComponent phase_txt_read
      letterHeight = 0.06
      pos = (0, 0.28)
      startVal [time (s)] = 0
      text = Target cue
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  Routine Processing_calibration
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    CodeComponent processing_code
      Code Type = Py
      Before Experiment:
        online_calibration_proc = None
        online_calibration_result = None
        online_calibration_result_path = None
        adaptation_allowed = False
        adaptation_reason = ''
        top_matches = []

        selected_model_key = None
        selected_mode_name = None

        completed_online_trials = 0
        predicted_word = ''
        prediction_confidence = ''
        feedback_text = ''
        run_summary_text = ''

        online_decoder_proc = None
        online_decoder_log_handle = None
        online_decoder_results_dir = None
        online_decoder_service_status_path = None
        online_decoder_latest_path = None
        online_decoder_summary_path = None
        online_decoder_launch_error = ''
        online_decoder_ready = False

        current_trial_index = 0
        decoder_result_for_trial = None
        expected_result_json_path = None
        decode_wait_start_time = None
        decode_timeout_sec = 10.0

        processing_stage = ''
        brainprint_candidate_npz = None
        brainprint_compare_json = None
        brainprint_best_match_file = ''
        brainprint_best_match_cosine = None
        brainprint_status = 'not_run'
        processing_stage_started_at = None
      Begin Routine:
        continueRoutine = True

        online_calibration_result = None
        adaptation_allowed = False
        adaptation_reason = ''
        top_matches = []

        selected_model_key = None if PREPARED_RUN is None else PREPARED_RUN.get('selected_model')
        selected_mode_name = None if PREPARED_RUN is None else PREPARED_RUN.get('selected_mode')

        online_decoder_launch_error = ''
        online_decoder_ready = False

        current_trial_index = 0
        decoder_result_for_trial = None
        expected_result_json_path = None
        decode_wait_start_time = None
        decode_timeout_sec = 10.0

        brainprint_candidate_npz = None
        brainprint_compare_json = None
        brainprint_best_match_file = ''
        brainprint_best_match_cosine = None
        brainprint_status = 'not_run'
        processing_stage_started_at = globalClock.getTime()

        if PREPARED_RUN is None:
            processing_text.text = "No prepared run bridge found."
            adaptation_reason = "No prepared run bridge found."
            processing_stage = "failed"

        else:
            online_decoder_results_dir = PREPARED_RUN.get('online_results_dir')
            if online_decoder_results_dir:
                os.makedirs(online_decoder_results_dir, exist_ok=True)

            online_decoder_service_status_path = (
                None if not online_decoder_results_dir
                else os.path.join(online_decoder_results_dir, 'service_status.json')
            )
            online_decoder_latest_path = (
                None if not online_decoder_results_dir
                else os.path.join(online_decoder_results_dir, 'latest.json')
            )
            online_decoder_summary_path = (
                None if not online_decoder_results_dir
                else os.path.join(online_decoder_results_dir, 'run_summary.json')
            )

            # clean stale files for this run
            if online_decoder_results_dir and os.path.isdir(online_decoder_results_dir):
                for stale_name in ['service_status.json', 'latest.json', 'run_summary.json']:
                    stale_path = os.path.join(online_decoder_results_dir, stale_name)
                    if os.path.exists(stale_path):
                        try:
                            os.remove(stale_path)
                        except Exception:
                            pass

                for filename in os.listdir(online_decoder_results_dir):
                    if filename.startswith('trial_') and filename.endswith('.json'):
                        try:
                            os.remove(os.path.join(online_decoder_results_dir, filename))
                        except Exception:
                            pass

            processing_text.text = "Processing calibration...\n\nComputing brainprint."
            processing_stage = "brainprint_compute_start"
      Each Frame:
        if processing_stage == "failed":
            continueRoutine = False

        elif processing_stage == "brainprint_compute_start":
            calibration_xdf = None
            if PREPARED_RUN is not None:
                calibration_xdf = PREPARED_RUN.get('recording_block_paths', {}).get('calibration')

            has_eeg = selected_mode_name is not None and ('EEG' in str(selected_mode_name))

            if (not has_eeg) or (not calibration_xdf) or (not os.path.exists(calibration_xdf)):
                brainprint_status = 'skipped'
                adaptation_reason = 'Skipping brainprint: no EEG calibration file available.'
                processing_text.text = "Processing calibration...\n\nSkipping brainprint.\nLaunching decoder."
                processing_stage = "decoder_start"

            else:
                brainprint_candidate_npz = os.path.join(
                    PROJECT_ROOT,
                    'brainprints',
                    'candidates',
                    os.path.splitext(os.path.basename(calibration_xdf))[0] + '.npz'
                )

                compute_script = os.path.join(PROJECT_ROOT, 'code', 'decoder', 'compute_brainprint.py')
                compute_cmd = [
                    get_decoder_python_exe(),
                    compute_script,
                    '--xdf', calibration_xdf,
                    '--out', brainprint_candidate_npz,
                    '--signal-stream-type', 'EEG',
                    '--marker-stream-name', 'PsychoPy_Markers',
                ]

                print("Running brainprint compute:", " ".join(compute_cmd))
                processing_text.text = "Processing calibration...\n\nComputing brainprint."

                try:
                    compute_res = subprocess.run(
                        compute_cmd,
                        capture_output=True,
                        text=True,
                        timeout=60,
                    )

                    if compute_res.stdout:
                        print("Brainprint compute stdout:\n", compute_res.stdout)
                    if compute_res.stderr:
                        print("Brainprint compute stderr:\n", compute_res.stderr)

                    bank_dir = get_configured_path('paths.brainprint_bank_dir', os.path.join(PROJECT_ROOT, 'brainprints', 'bank'))
                    bank_has_npz = False
                    if os.path.isdir(bank_dir):
                        for fname in os.listdir(bank_dir):
                            if fname.endswith('.npz'):
                                bank_has_npz = True
                                break

                    if compute_res.returncode == 0 and brainprint_candidate_npz and os.path.exists(brainprint_candidate_npz) and bank_has_npz:
                        processing_text.text = "Processing calibration...\n\nComparing brainprint against bank."
                        processing_stage = "brainprint_compare_start"
                    elif compute_res.returncode == 0:
                        brainprint_status = 'ok_no_bank'
                        adaptation_reason = 'Brainprint computed, but bank comparison skipped because bank is empty.'
                        processing_text.text = "Processing calibration...\n\nBrainprint computed.\nNo bank available.\nLaunching decoder."
                        processing_stage = "decoder_start"
                    else:
                        brainprint_status = 'failed'
                        adaptation_allowed = False
                        adaptation_reason = 'Brainprint computation failed.'
                        processing_text.text = "Processing calibration...\n\nBrainprint computation failed.\nLaunching decoder without adaptation."
                        processing_stage = "decoder_start"

                except subprocess.TimeoutExpired:
                    brainprint_status = 'failed'
                    adaptation_allowed = False
                    adaptation_reason = 'Brainprint computation timed out.'
                    processing_text.text = "Processing calibration...\n\nBrainprint computation timed out.\nLaunching decoder without adaptation."
                    processing_stage = "decoder_start"

        elif processing_stage == "brainprint_compute_wait":
            if brainprint_compute_proc is not None:
                return_code = brainprint_compute_proc.poll()
                if return_code is not None:
                    stdout_text, stderr_text = brainprint_compute_proc.communicate()

                    if stdout_text:
                        print("Brainprint compute stdout:\n", stdout_text)
                    if stderr_text:
                        print("Brainprint compute stderr:\n", stderr_text)

                    bank_dir = get_configured_path('paths.brainprint_bank_dir', os.path.join(PROJECT_ROOT, 'brainprints', 'bank'))
                    bank_has_npz = False
                    if os.path.isdir(bank_dir):
                        for fname in os.listdir(bank_dir):
                            if fname.endswith('.npz'):
                                bank_has_npz = True
                                break

                    if return_code == 0 and brainprint_candidate_npz and os.path.exists(brainprint_candidate_npz) and bank_has_npz:
                        processing_text.text = "Processing calibration...\n\nComparing brainprint against bank."
                        processing_stage = "brainprint_compare_start"
                    elif return_code == 0:
                        brainprint_status = 'ok_no_bank'
                        adaptation_reason = 'Brainprint computed, but bank comparison skipped because bank is empty.'
                        processing_text.text = "Processing calibration...\n\nBrainprint computed.\nNo bank available.\nLaunching decoder."
                        processing_stage = "decoder_start"
                    else:
                        brainprint_status = 'failed'
                        adaptation_reason = 'Brainprint computation failed.'
                        processing_text.text = "Processing calibration...\n\nBrainprint computation failed.\nLaunching decoder without adaptation."
                        processing_stage = "decoder_start"

        elif processing_stage == "brainprint_compare_start":
            compare_script = os.path.join(PROJECT_ROOT, 'code', 'decoder', 'compare_brainprint.py')
            brainprint_compare_json = os.path.join(
                PROJECT_ROOT,
                'brainprints',
                'comparisons',
                os.path.splitext(os.path.basename(brainprint_candidate_npz))[0] + '_compare.json'
            )

            compare_cmd = [
                get_decoder_python_exe(),
                compare_script,
                '--mode', 'query',
                '--query', brainprint_candidate_npz,
                '--bank-dir', get_configured_path('paths.brainprint_bank_dir', os.path.join(PROJECT_ROOT, 'brainprints', 'bank')),
                '--top-k', '10',
                '--strict-meta-keys', 'signal_type', 'fs', 'tmin', 'tmax',
                '--out', brainprint_compare_json,
            ]

            print("Running brainprint compare:", " ".join(compare_cmd))
            processing_text.text = "Processing calibration...\n\nComparing brainprint against bank."

            try:
                compare_res = subprocess.run(
                    compare_cmd,
                    capture_output=True,
                    text=True,
                    timeout=60,
                )

                if compare_res.stdout:
                    print("Brainprint compare stdout:\n", compare_res.stdout)
                if compare_res.stderr:
                    print("Brainprint compare stderr:\n", compare_res.stderr)

                if compare_res.returncode == 0 and os.path.exists(brainprint_compare_json):
                    try:
                        with open(brainprint_compare_json, 'r', encoding='utf-8') as f:
                            compare_payload = json.load(f)
                        top_matches = compare_payload.get('ranked_results', [])
                    except Exception:
                        top_matches = []

                    if len(top_matches) > 0:
                        brainprint_best_match_file = top_matches[0].get('file', '')
                        brainprint_best_match_cosine = top_matches[0].get('cosine_similarity', None)
                        adaptation_allowed = True
                        adaptation_reason = 'Brainprint compared successfully.'
                    else:
                        adaptation_allowed = False
                        adaptation_reason = 'Brainprint compare produced no ranked results.'

                    brainprint_status = 'ok'
                    processing_text.text = "Processing calibration...\n\nBrainprint compared.\nLaunching decoder."
                else:
                    brainprint_status = 'failed'
                    adaptation_allowed = False
                    adaptation_reason = 'Brainprint comparison failed.'
                    processing_text.text = "Processing calibration...\n\nBrainprint comparison failed.\nLaunching decoder without adaptation."

                processing_stage = "decoder_start"

            except subprocess.TimeoutExpired:
                brainprint_status = 'failed'
                adaptation_allowed = False
                adaptation_reason = 'Brainprint comparison timed out.'
                processing_text.text = "Processing calibration...\n\nBrainprint comparison timed out.\nLaunching decoder without adaptation."
                processing_stage = "decoder_start"

        elif processing_stage == "brainprint_compare_wait":
            if brainprint_compare_proc is not None:
                return_code = brainprint_compare_proc.poll()
                if return_code is not None:
                    stdout_text, stderr_text = brainprint_compare_proc.communicate()

                    if stdout_text:
                        print("Brainprint compare stdout:\n", stdout_text)
                    if stderr_text:
                        print("Brainprint compare stderr:\n", stderr_text)

                    if return_code == 0 and brainprint_compare_json and os.path.exists(brainprint_compare_json):
                        try:
                            with open(brainprint_compare_json, 'r', encoding='utf-8') as f:
                                compare_payload = json.load(f)
                            top_matches = compare_payload.get('ranked_results', [])
                        except Exception:
                            top_matches = []

                        if len(top_matches) > 0:
                            brainprint_best_match_file = top_matches[0].get('file', '')
                            brainprint_best_match_cosine = top_matches[0].get('cosine_similarity', None)
                            adaptation_allowed = True
                            adaptation_reason = 'Brainprint compared successfully.'
                        else:
                            adaptation_allowed = False
                            adaptation_reason = 'Brainprint compare produced no ranked results.'

                        brainprint_status = 'ok'
                        processing_text.text = "Processing calibration...\n\nBrainprint compared.\nLaunching decoder."
                    else:
                        brainprint_status = 'failed'
                        adaptation_allowed = False
                        adaptation_reason = 'Brainprint comparison failed.'
                        processing_text.text = "Processing calibration...\n\nBrainprint comparison failed.\nLaunching decoder without adaptation."

                    processing_stage = "decoder_start"

        elif processing_stage == "decoder_start":
            if PREPARED_RUN is None:
                online_decoder_launch_error = 'PREPARED_RUN is missing.'
                processing_text.text = "Could not launch decoder:\nPREPARED_RUN missing."
                processing_stage = "decoder_failed"

            else:
                decoder_script = get_configured_path('paths.online_decoder_service_script', os.path.join(PROJECT_ROOT, 'code', 'decoder', 'online_decoder_service.py'))
                bridge_path = PREPARED_RUN_SOURCE if PREPARED_RUN_SOURCE else os.path.join(PROJECT_ROOT, 'data', 'latest_prepared_run.json')
                bundle_path = PREPARED_RUN.get('decoder_bundle_path')
                summary_json = PREPARED_RUN.get('brainprint_summary_json')

                cmd = [
                    get_decoder_python_exe(),
                    decoder_script,
                    '--bridge', bridge_path,
                    '--results-dir', online_decoder_results_dir,
                    '--marker-stream-name', 'PsychoPy_Markers',
                    '--mode', PREPARED_RUN.get('experiment_mode', 'online_imagined'),
                    '--device', 'cpu',
                ]

                if bundle_path:
                    cmd.extend(['--bundle-path', bundle_path])

                if brainprint_compare_json and os.path.exists(brainprint_compare_json):
                    cmd.extend(['--brainprint-compare-json', brainprint_compare_json])

                if summary_json and os.path.exists(summary_json):
                    cmd.extend(['--brainprint-summary-json', summary_json])

                print("Launching online decoder service:")
                print(" ".join(cmd))

                online_decoder_proc = subprocess.Popen(cmd)
                processing_text.text = "Processing calibration...\n\nLaunching decoder service."
                processing_stage_started_at = globalClock.getTime()
                processing_stage = "decoder_wait_ready"

        elif processing_stage == "decoder_wait_ready":
            status_payload = None

            if online_decoder_service_status_path and os.path.exists(online_decoder_service_status_path):
                try:
                    with open(online_decoder_service_status_path, 'r', encoding='utf-8') as f:
                        status_payload = json.load(f)
                except Exception:
                    status_payload = None

            if status_payload is not None:
                decoder_status = status_payload.get('status', 'unknown')
                processing_text.text = f"Processing calibration...\n\nDecoder status: {decoder_status}"

                if decoder_status == 'running':
                    online_decoder_ready = True
                    continueRoutine = False

            if online_decoder_proc is not None and online_decoder_proc.poll() is not None and not online_decoder_ready:
                online_decoder_launch_error = 'Online decoder service exited before reaching running state.'
                processing_text.text = online_decoder_launch_error
                processing_stage = "decoder_failed"

            elif globalClock.getTime() - processing_stage_started_at >= 20.0 and not online_decoder_ready:
                online_decoder_launch_error = 'Timed out waiting for decoder service to reach running state.'
                processing_text.text = online_decoder_launch_error
                processing_stage = "decoder_failed"

        elif processing_stage == "decoder_failed":
            adaptation_allowed = False
            if not adaptation_reason:
                adaptation_reason = online_decoder_launch_error if online_decoder_launch_error else 'Decoder launch failed.'
            continueRoutine = False
      End Routine:
        thisExp.addData('adaptation_allowed', adaptation_allowed)
        thisExp.addData('adaptation_reason', adaptation_reason)
        thisExp.addData('brainprint_status', brainprint_status)
        thisExp.addData('brainprint_candidate_npz', brainprint_candidate_npz if brainprint_candidate_npz else '')
        thisExp.addData('brainprint_compare_json', brainprint_compare_json if brainprint_compare_json else '')
        thisExp.addData('online_decoder_results_dir', online_decoder_results_dir if online_decoder_results_dir else '')
        thisExp.addData('online_decoder_service_status_path', online_decoder_service_status_path if online_decoder_service_status_path else '')
        thisExp.addData('online_decoder_ready', online_decoder_ready)

        if brainprint_best_match_file:
            thisExp.addData('best_match_file', brainprint_best_match_file)
        else:
            thisExp.addData('best_match_file', '')

        if brainprint_best_match_cosine is not None:
            thisExp.addData('best_match_cosine', brainprint_best_match_cosine)
        else:
            thisExp.addData('best_match_cosine', '')
    TextComponent processing_text
      letterHeight = 0.07
      startVal [time (s)] = 0
      wrapWidth = 1.3
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      text:
        Processing calibration profile...

        Please wait.
  Routine decode_wait
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    CodeComponent decode_code
      Code Type = Py
      Begin Routine:
        decoder_result_for_trial = None
        decode_wait_start_time = globalClock.getTime()
        decode_timeout_sec = 10.0
        decoder_read_error = ''

        predicted_word = ''
        prediction_confidence = ''
        decoder_latency_ms = ''
        decoder_status = 'waiting'

        if not online_decoder_results_dir and PREPARED_RUN is not None:
            online_decoder_results_dir = PREPARED_RUN.get('online_results_dir')

        if online_decoder_results_dir:
            expected_result_json_path = os.path.join(
                online_decoder_results_dir,
                f"trial_{current_trial_index:03d}.json"
            )
        else:
            expected_result_json_path = None

        thisExp.addData('expected_result_json_path', expected_result_json_path if expected_result_json_path else '')
        thisExp.addData('target_word', target_word)
      Each Frame:
        if expected_result_json_path is not None and os.path.exists(expected_result_json_path):
            try:
                with open(expected_result_json_path, 'r', encoding='utf-8') as f:
                    decoder_result_for_trial = json.load(f)
                decoder_read_error = ''
            except (PermissionError, OSError, json.JSONDecodeError, ValueError) as exc:
                # Windows can briefly lock the JSON while the decoder is writing it,
                # or PsychoPy can catch the file before it is fully flushed. Do not
                # crash the experiment; keep waiting and retry next frame until timeout.
                decoder_result_for_trial = None
                decoder_read_error = f"{type(exc).__name__}: {exc}"
                decoder_status = 'read_retry'
                feedback_text = (
                    f"Target: {target_word}\n"
                    f"Waiting for decoder result...\n"
                    f"{decoder_read_error}"
                )

            if decoder_result_for_trial is not None:
                predicted_word = decoder_result_for_trial.get('predicted_word', 'NO_RESULT')
                prediction_confidence = decoder_result_for_trial.get('confidence', '')
                decoder_latency_ms = decoder_result_for_trial.get('latency_ms', '')
                decoder_status = decoder_result_for_trial.get('status', 'unknown')

                if decoder_status == "ok":
                    feedback_text = (
                        f"Target: {target_word}\n"
                        f"Prediction: {predicted_word}\n"
                        f"Confidence: {prediction_confidence}"
                    )
                else:
                    feedback_text = (
                        f"Target: {target_word}\n"
                        f"Prediction: {predicted_word}\n"
                        f"Confidence: {prediction_confidence}\n"
                        f"Decoder status: {decoder_status}"
                    )

                continueRoutine = False

        elif globalClock.getTime() - decode_wait_start_time >= decode_timeout_sec:
            predicted_word = 'TIMEOUT'
            prediction_confidence = ''
            decoder_latency_ms = ''
            decoder_status = 'timeout'

            feedback_text = (
                f"Target: {target_word}\n"
                f"Prediction: {predicted_word}\n"
                f"Decoder status: timeout"
            )

            continueRoutine = False

        # If the file exists but is temporarily unreadable, the retry branch above keeps
        # continueRoutine=True until the normal timeout condition is reached.
      End Experiment:
        try:
            if online_decoder_proc is not None and online_decoder_proc.poll() is None:
                online_decoder_proc.terminate()
                try:
                    online_decoder_proc.wait(timeout=2.0)
                except Exception:
                    online_decoder_proc.kill()
                print("Online decoder service terminated cleanly.")
        except Exception as e:
            print(f"Could not terminate online decoder service cleanly: {e}")
      End Routine:
        thisExp.addData('predicted_word', predicted_word)
        thisExp.addData('prediction_confidence', prediction_confidence)
        thisExp.addData('decoder_status', decoder_status)
        thisExp.addData('decoder_latency_ms', decoder_latency_ms)
        thisExp.addData('decoder_read_error', decoder_read_error if 'decoder_read_error' in globals() or 'decoder_read_error' in locals() else '')
    TextComponent decode_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Decoding...
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  Routine online_feedback
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    TextComponent feedback_txt
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
      wrapWidth = 1.2
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    CodeComponent feedback_code
      Code Type = Py
      End Experiment:
        # Destroy the LSL stream to release the background thread
        try:
            del outlet
            del info
            print("LSL marker stream closed cleanly.")
        except:
            pass
Flow
  Routine Welcome
  Routine cal_instructions
  Routine Start_record
  LoopInitiator cal loopType="TrialHandler"
    endPoints = [0,1]
    loopType = sequential
    nReps = 200
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    Routine calibration
  LoopTerminator cal
  Routine Stop_record
  Routine Processing_calibration
  Routine Instructions_imagined
  Routine Start_record
  LoopInitiator trials_online_imagined loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    endPoints = [0,1]
    loopType = random
    nReps = 45
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    conditions:
      [{'target_word': '1 (ONE)'},
      {'target_word': '2 (TWO)'},
      {'target_word': '3 (THREE)'},
      {'target_word': '4 (FOUR)'},
      {'target_word': '5 (FIVE)'},
      {'target_word': 'REJOIN'},
      {'target_word': 'ASSET'},
      {'target_word': 'ABORT'},
      {'target_word': 'FORMATION'},
      {'target_word': 'REFUEL'}]
    Routine wait
    Routine read
    Routine trial
    Routine decode_wait
    Routine online_feedback
    Routine mini_break
  LoopTerminator trials_online_imagined
  Routine Stop_record
  Routine Finish
